[[model]]
name: ohara-2011
author: Michael Clerx
desc: """
    Myokit implementation of the O'Hara-Rudy dynamic (ORd) model for the
    undiseased human ventricular action potential and calcium transient.

    Based on the matlab code published on the rudylab website (see below) and
    checked against the supplement published with [1]

    References:
    [1] O'Hara et al. (2011) Simulation of the Undiseased Human Cardiac
    Ventricular Action Potential: Model Formulation and Experimental
    Validation. PLoS Computational Biology
    doi: 10.1371/journal.pcbi.1002061


    Original copyright notice:
    ---------------------------------------------------------------------------
    MATLAB Implementation of the O'Hara-Rudy dynamic (ORd) model for the
    undiseased human ventricular action potential and calcium transient

    The ORd model is described in the article "Simulation of the Undiseased
    Human Cardiac Ventricular Action Potential: Model Formulation and
    Experimental Validation"
    by Thomas O'Hara, Laszlo Virag, Andras Varro, and Yoram Rudy

    The article and supplemental materails are freely available in the
    Open Access jounal PLoS Computational Biology
    Link to Article:
    http://www.ploscompbiol.org/article/info:doi/10.1371/journal.pcbi.1002061

    Email: tom.ohara@gmail.com / rudy@wustl.edu
    Web: http://rudylab.wustl.edu

    The ORd model is free software: you can redistribute it and/or modify it
    under the terms of the GNU General Public License as published by the
    Free Software Foundation, either version 3 of the License, or (at your
    option) any later version. The ORd model is distributed in the hope that
    it will be useful, but WITHOUT ANY WARRANTY; without even the implied
    warranty of MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
    GNU General Public License for more details (www.gnu.org/licenses)
    """
# Initial values
membrane.V     = -8.79337376452801180e+01
sodium.Nai     =  7.87619157909246326e+00
sodium.Na_ss   =  7.87627539602532334e+00
potassium.Ki   =  1.43978229409269147e+02
potassium.K_ss =  1.43978196841957015e+02
calcium.Cai    =  7.73782527884485025e-05
calcium.Ca_ss  =  7.65016328161378207e-05
calcium.Ca_nsr =  2.00315748200632049e+00
calcium.Ca_jsr =  1.93042630940600501e+00
ina.m          =  7.39463686371098772e-03
ina.hf         =  6.95741454522123104e-01
ina.hs         =  6.95728197104262369e-01
ina.j          =  6.95651647826611597e-01
ina.hsp        =  4.52188557189629303e-01
ina.jp         =  6.95597910627556826e-01
inal.m         =  1.90715020768938265e-04
inal.h         =  4.99522746606105295e-01
inal.hp        =  2.72810177142271237e-01
ito.a          =  1.00570709452367925e-03
ito.if         =  9.99548880136425399e-01
ito.is         =  9.99533745716891353e-01
ito.ap         =  5.12436070542799369e-04
ito.ifp        =  9.99548880551930030e-01
ito.isp        =  9.99545575452487567e-01
ical.d         =  2.37881176709094455e-09
ical.ff        =  9.99999990705337294e-01
ical.fs        =  9.18897177694176892e-01
ical.fcaf      =  9.99999990705387476e-01
ical.fcas      =  9.99819725932237224e-01
ical.jca       =  9.99970037851850901e-01
ical.nca       =  1.84136216190179344e-03
ical.ffp       =  9.99999990703007158e-01
ical.fcafp     =  9.99999990703148378e-01
ikr.xf         =  8.16746880675702540e-06
ikr.xs         =  4.45866513514587226e-01
iks.x1         =  2.47200524644588970e-01
iks.x2         =  1.94312775753246043e-04
ik1.x          =  9.96777535658642466e-01
ryr.Jrelnp     =  4.56814610344467302e-07
ryr.Jrelp      =  5.70887607296486255e-07
camk.CaMKt     =  1.64243946584969880e-02


#
# External variables
#
[engine]
time = 0 in [ms] bind time
pace = 0 bind pace

#
# Membrane potential
# Page 5
#
[membrane]
dot(V) = -(i_ion + stimulus.i_stim)
    label membrane_potential
    in [mV]
i_ion = (sodium.INa_tot
        + sodium.INa_ss_tot
        + calcium.ICa_tot
        + calcium.ICa_ss_tot
        + potassium.IK_tot
        + potassium.IK_ss_tot
        )
    label cellular_current
    in [uA/uF]

#
# Stimulus current
# Page 5
#
[stimulus]
i_stim = engine.pace * amplitude
amplitude = -80 [uA/uF]

#
# Cell geometry
# Page 6
#
[cell]
mode = 1
    desc: The type of cell. Endo = 0, Epi = 1, Mid = 2
L = 0.01 [cm] : Cell length
r = 0.0011 [cm] :  Cell radius
vcell = 1000 * 3.14 * r * r * L
    in [uL]
    desc: Cell volume
Ageo = 2*3.14 * r * r + 2 * 3.14 * r * L
    in [cm^2]
    desc: Geometric cell area
Acap = 2 * Ageo
    in [cm^2]
    desc: Capacitative membrane area
AF = Acap / phys.F
vmyo = 0.68 * vcell
    in [uL]
    desc: Volume of the cytosolic compartment
vnsr = 0.0552 * vcell
    in [uL]
    desc: Volume of the NSR compartment
vjsr = 0.0048 * vcell
    in [uL]
    desc: Volume of the JSR compartment
vss = 0.02 * vcell
    in [uL]
    desc: Volume of the Submembrane space near the T-tubules

#
# Physical constants
# Page 2
#
[phys]
R = 8314  [J/kmol/K] : Gas constant
T = 310   [K] : Temperature
F = 96485 [C/mol] : Faraday's constant
RTF = R * T / F
FRT = F / (R * T)
FFRT = F * F / (R * T)

#
# Extracellular concentrations
# Page 5
#
[extra]
Nao = 140 [mmol/L] : Extracellular Na+ concentration
Cao = 1.8 [mmol/L] : Extracellular Ca2+ concentration
Ko  = 5.4 [mmol/L] : Extracellular K+ concentration

#
# Reversal potentials
# Page 6
#
[nernst]
ENa = phys.RTF * log(extra.Nao / sodium.Nai)
    in [mV]
    desc: Reversal potential for Sodium currents
EK = phys.RTF * log(extra.Ko / potassium.Ki)
    in [mV]
    desc: Reversal potential for Potassium currents
PNaK = 0.01833
    desc: Permeability ratio K+ to Na+
EKs = phys.RTF * log((extra.Ko + PNaK * extra.Nao) / (potassium.Ki + PNaK * sodium.Nai))
    desc: Reversal potential for IKs
    in [mV]

#
# INa :: Fast Sodium current
# Page 6
#
# The fast sodium current is modelled using a Hodgkin-Huxley type formulation
# including activation (m), slow and fast components of inactivation (h) and
# recovery from inactivation (j). The slow component of inactivation and
# recovery from inactivation have an alternative formulation for CaMKII-
# phosphorylated channels.
#
[ina]
use membrane.V
tm  = 1 / (6.765 * exp((V + 11.64) / 34.77) + 8.552 * exp(-(V + 77.42) / 5.955))
    desc: Time constant for m-gate
    in [ms]
sm  = 1 / (1 + exp((V + 39.57) / -9.871))
    desc: Steady state value for m-gate
dot(m) = (sm - m) / tm
    desc: Activation gate for INa channels
sh  = 1 / (1 + exp((V + 82.90) / 6.086))
    desc: Steady-state value for h-gate
thf = 1 / (1.432e-5 * exp((V + 1.196) / -6.285) + 6.1490 * exp((V + 0.5096) / 20.27))
    desc: Time constant for fast development of inactivation in INa
    in [ms]
ths = 1 / (0.009794 * exp((V + 17.95) / -28.05) + 0.3343 * exp((V + 5.7300) / 56.66))
    desc: Time constant for slow development of inactivation in INa
    in [ms]
Ahf = 0.99 : Fraction of INa channels with fast inactivation
Ahs = 1.0 - Ahf : Fraction of INa channels with slow inactivation
dot(hf) = (sh - hf) / thf
    desc: Fast componennt of the inactivation gate for INa channels
dot(hs) = (sh - hs) / ths
    desc: Slow componennt of the inactivation gate for non-phosphorylated INa channels
h = Ahf * hf + Ahs * hs
    desc: Inactivation gate for INa
tj = 2.038 + 1 / (0.02136 * exp((V + 100.6) / -8.281) + 0.3052 * exp((V + 0.9941) / 38.45))
    desc: Time constant for j-gate in INa
    in [ms]
sj = sh
    desc: Steady-state value for j-gate in INa
dot(j) = (sj - j) / tj
    desc: Recovery from inactivation gate for non-phosphorylated INa channels
# Phosphorylated channels
thsp = 3 * ths
    desc: Time constant for h-gate of phosphorylated INa channels
    in [ms]
shsp = 1 / (1 + exp((V + 89.1) / 6.086))
    desc: Steady-state value for h-gate of phosphorylated INa channels
dot(hsp) = (shsp - hsp) / thsp
    desc: Slow componennt of the inactivation gate for phosphorylated INa channels
hp = Ahf * hf + Ahs * hsp
    desc: Inactivation gate for phosphorylated INa channels
tjp = 1.46 * tj
    desc: Time constant for the j-gate of phosphorylated INa channels
    in [ms]
dot(jp) = (sj - jp) / tjp
    desc: Recovery from inactivation gate for phosphorylated INa channels
# Current
GNa = 75 : Maximum conductance of INa channels
INa = GNa * (V - nernst.ENa) * m^3 * ((1 - camk.f) * h * j + camk.f * hp * jp)
    in [uA/uF]
    desc: Fast sodium current

#
# INaL :: Late component of the Sodium current
# Page 7
#
[inal]
use membrane.V
use ina.tm
sm = 1 / (1 + exp((V + 42.85) / -5.264))
    desc: Steady state value of m-gate for INaL
dot(m) = (sm - m) / tm
    desc: Activation gate for INaL
th = 200.0 [ms] : Time constant for inactivation of non-phosphorylated INaL channels
sh = 1 / (1 + exp((V + 87.61) / 7.488))
    desc: Steady-state value for inactivation of non-phosphorylated INaL channels
dot(h) = (sh - h) / th
    desc: Inactivation gate for non-phosphorylated INaL channels
thp = 3 * th
    in [ms]
    desc: Time constant for inactivation of phosphorylated INaL channels
shp = 1 / (1 + exp((V + 93.81) / 7.488))
    desc: Steady state value for inactivation of phosphorylated INaL channels
dot(hp) = (shp - hp) / thp
    desc: Inactivation gate for phosphorylated INaL channels
# Current
GNaL = 0.0075 : Maximum conductance of INaL
f_gnal = if(cell.mode == 1, 0.6, 1)
    desc: Adjustment for different cell types
INaL = f_gnal * GNaL * (V - nernst.ENa) * m * ((1 - camk.f) * h + camk.f * hp)
    in [A/F]

#
# Ito :: Transient outward Potassium current
# page 8
#
[ito]
use membrane.V
ta = 1.0515 / (one + two)
    one = 1 / (1.2089 * (1 + exp((V - 18.4099) / -29.3814)))
    two = 3.5 / (1 + exp((V + 100) / 29.3814))
    desc: Time constant for Ito activation
    in [ms]
sa = 1 / (1 + exp((V - 14.34) / -14.82))
    desc: Steady-state value for Ito activation
dot(a) = (sa - a) / ta
    desc: Ito activation gate
si = 1 / (1 + exp((V + 43.94) / 5.711))
    desc: Steady-state value for Ito inactivation
delta_epi = if(cell.mode == 1,
    1 - (0.95 / (1 + exp((V + 70) / 5))),
    1)
    desc: Adjustment for different cell types
tif = (4.562 + 1 / (0.3933 * exp((V+100) / -100) + 0.08004 * exp((V + 50) / 16.59))) * delta_epi
    desc: Time constant for fast component of Ito inactivation
    in [ms]
tis = (23.62 + 1 / (0.001416 * exp((V + 96.52) / -59.05)+ 1.780e-8 * exp((V + 114.1) / 8.079))) * delta_epi
    desc: Time constant for slow component of Ito inactivation
    in [ms]
dot(if) = (si - if) / tif
    desc: Fast component of Ito activation
dot(is) = (si - is) / tis
    desc: Slow component of Ito activation
Aif = 1 / (1 + exp((V - 213.6) / 151.2))
    desc: Fraction of fast inactivating Ito channels
Ais = 1 - Aif
    desc: Fraction of slow inactivating Ito channels
i = Aif * if + Ais * is
    desc: Inactivation gate for non-phosphorylated Ito
dot(ap) = (assp - ap) / ta
    assp=1.0/(1.0+exp((-(V-24.34))/14.82))
dti_develop = 1.354 + 1e-4 / (exp((V - 167.4) / 15.89) + exp((V - 12.23) / -0.2154))
dti_recover = 1 - 0.5 / (1 + exp((V+70) / 20))
tifp = dti_develop * dti_recover * tif
    desc: Time constant for fast component of inactivation of phosphorylated Ito channels
    in [ms]
tisp = dti_develop * dti_recover * tis
    desc: Time constant for slot component of inactivation of phosphorylated Ito channels
    in [ms]
dot(ifp) = (si - ifp) / tifp
    desc: Fast component of inactivation of phosphorylated Ito channels
dot(isp) = (si - isp) / tisp
    desc: Slow component of inactivation of phosphorylated Ito channels
ip = Aif * ifp + Ais * isp
    desc: Inactivation gate for phosphorylated Ito channels
# Current
Gto = if(cell.mode == 0, 0.02, 0.08)
    desc: Maximum conductance of Ito channels
Ito = Gto * (V - nernst.EK) * ((1 - camk.f) * a * i + camk.f * ap * ip)
    desc: Transient outward Potassium current
    in [A/F]

#
# ICaL  :: L-type Calcium current
# ICaNa :: Sodium current through the L-type Calcium channel
# ICaK  :: Potassium current through the L-type Calcium channel
# Page 9
#
# The ICaL channel is modeled using activation, inactivation (fast and slow),
# Ca-dependent inactivation (fast and slow) and recovery from Ca-dependent
# inactivation.
# Inactivation and Ca-dependent inactivation have an alternative formulation
# for CaMKII phosphorylated channels.
#
#
[ical]
use membrane.V
vf = V * phys.FRT
vff = V * phys.FFRT
# Activation
sd = 1 / (1 + exp((V + 3.94) / -4.23))
    desc: Steady-state value for activation gate of ICaL channel
td = 0.6 + 1 / (exp(-0.05 * (V + 6)) + exp(0.09 * (V + 14)))
    desc: Time constant for activation gate of ICaL channel
    in [ms]
dot(d) = (sd - d) / td
    desc: Activation gate of ICaL channel
# Inactivation
sf = 1 / (1 + exp((V + 19.58) / 3.696))
    desc: Steady-state value for inactivation gate of ICaL channel
tff = 7 + 1 / (0.0045 * exp((V + 20) / -10) + 0.0045 * exp((V + 20) / 10))
    desc: Time constant for fast inactivation of ICaL channels
    in [ms]
tfs = 1000 + 1 / (0.000035 * exp((V + 5) / -4) + 0.000035 * exp((V + 5) / 6))
    desc: Time constant for fast inactivation of ICaL channels
    in [ms]
dot(ff) = (sf - ff) / tff
    desc: Fast inactivation of ICaL channels
dot(fs) = (sf - fs) / tfs
    desc: Slow inactivation of ICaL channels
Aff = 0.6 : Fraction of ICaL channels with fast inactivation
Afs = 1 - Aff : Fraction of ICaL channels with slow inactivation
f = Aff * ff + Afs * fs
    desc: Inactivation of ICaL channels
# Ca-dependent inactivation
sfca = sf
    desc: Steady-state value for Ca-dependent inactivation of ICaL channels
tfcaf = 7 + 1 / (0.04 * exp((V - 4) / -7) + 0.04 * exp((V - 4) / 7))
    desc: Time constant for fast Ca-dependent inactivation of ICaL channels
    in [ms]
tfcas = 100 + 1 / (0.00012 * exp(V / -3) + 0.00012 * exp(V / 7))
    desc: Time constant for slow Ca-dependent inactivation of ICaL channels
    in [ms]
Afcaf = 0.3 + 0.6 / (1 + exp((V - 10) / 10))
    desc: Fraction of ICaL channels with fast Ca-dependent inactivation
Afcas = 1 - Afcaf
    desc: Fraction of ICaL channels with slow Ca-dependent inactivation
dot(fcaf) = (sfca - fcaf) / tfcaf
    desc: Fast Ca-dependent inactivation of ICaL channels
dot(fcas) = (sfca - fcas) / tfcas
    desc: Slow Ca-dependent inactivation of ICaL channels
fca = Afcaf * fcaf + Afcas * fcas
    desc: Ca-dependent inactivation of ICaL channels
# Recovery from Ca-dependent inactivation
tjca = 75 [ms] : Time constant of recovery from Ca-dependent inactivation
dot(jca) = (sfca - jca) / tjca
    desc: Recovery from Ca-dependent inactivation
# Inactivation of phosphorylated channels
tffp = 2.5 * tff
    in [ms]
    desc: Time constant for fast inactivation of phosphorylated ICaL channels
dot(ffp) = (sf - ffp) / tffp
    desc: Fast inactivation of phosphorylated ICaL channels
fp = Aff * ffp + Afs * fs
    desc: Inactivation of phosphorylated ICaL channels
# Ca-dependent inactivation of phosphorylated channels
tfcafp = 2.5 * tfcaf
    in [ms]
    desc: Time constant for fast Ca-dependent inactivation of phosphorylated ICaL channels
dot(fcafp) = (sfca - fcafp) / tfcafp
    desc: Fast Ca-dependent inactivation of phosphorylated ICaL channels
fcap = Afcaf * fcafp + Afcas * fcas
    desc: Ca-dependent inactivation of phosphorylated ICaL channels
# Fraction of channels with Ca-dependent inactivation
dot(nca) = anca * k2n - nca*km2n
    anca = 1 / (k2n / km2n + (1 + Kmn / calcium.Ca_ss)^4.0)
    Kmn = 0.002
    k2n = 1000
    km2n = jca * 1.0
    desc: Fraction of channels in Ca-depdent inactivation mode
# Total currents through ICaL channel
PhiCaL  = 4 * vff *(       calcium.Ca_ss  * exp(2 * vf) - 0.341 * extra.Cao) / (exp(2 * vf) - 1)
PhiCaNa = 1 * vff *(0.75 * sodium.Na_ss   * exp(1 * vf) - 0.75  * extra.Nao) / (exp(1 * vf) - 1)
PhiCaK  = 1 * vff *(0.75 * potassium.K_ss * exp(1 * vf) - 0.75  * extra.Ko ) / (exp(1 * vf) - 1)
PCa = piecewise(cell.mode == 0, base, cell.mode == 1, 1.2*base, 2.5*base)
    base = 0.0001
PCap   = 1.1      * PCa
PCaNa  = 0.00125  * PCa
PCaK   = 3.574e-4 * PCa
PCaNap = 0.00125  * PCap
PCaKp  = 3.574e-4 * PCap
g  = d * (f  * (1 - nca) + jca * fca  * nca)
    desc: Conductivity of non-phosphorylated ICaL channels
gp = d * (fp * (1 - nca) + jca * fcap * nca)
    desc: Conductivity of phosphorylated ICaL channels
ICaL   = (1 - camk.f) * PCa   * PhiCaL  * g + camk.f * PCap   * PhiCaL  * gp
    desc: L-type Calcium current
    in [uA/uF]
ICaNa  = (1 - camk.f) * PCaNa * PhiCaNa * g + camk.f * PCaNap * PhiCaNa * gp
    desc: Sodium current through ICaL channels
    in [uA/uF]
ICaK   = (1 - camk.f) * PCaK  * PhiCaK  * g + camk.f * PCaKp  * PhiCaK  * gp
    desc: Potassium current through ICaL channels
    in [uA/uF]
ICaL_total = ICaL + ICaNa + ICaK
    in [A/F]

#
# IKr :: Rapid delayed rectifier Potassium current
# Page 11
#
# Modelled with activation (fast and slow) and an instantaneous inactivation.
#
[ikr]
use membrane.V
# Activation
sx = 1 / (1 + exp((V + 8.337) / -6.789))
    desc: Steady-state value for IKr activation
txf = 12.98 + 1 / (0.36520 * exp((V - 31.66) / 3.869) + 4.123e-5 * exp((V - 47.78) / -20.38))
    desc: Time constant for fast IKr activation
txs = 1.865 + 1 / (0.06629 * exp((V - 34.70) / 7.355) + 1.128e-5 * exp((V - 29.74) / -25.94))
    desc: Time constant for slow IKr activation
dot(xf) = (sx - xf) / txf
    desc: Fast activation of IKr channels
dot(xs) = (sx - xs) / txs
    desc: Slow activation of IKr channels
Axf = 1 / (1 + exp((V + 54.81) / 38.21))
    desc: Fraction of IKr channels with fast activation
Axs = 1 - Axf
    desc: Fraction of IKr channels with slow activation
x = Axf * xf + Axs * xs
    desc: Activation of IKr channels
# Inactivation
r = 1 / (1 + exp((V + 55) / 75)) * 1 / (1 + exp((V - 10) / 30))
    desc: Inactivation of IKr channels
# Current
GKr = piecewise(cell.mode == 0, base, cell.mode == 1, 1.3 * base, 0.8 * base)
    base = 0.046
    desc: Maximum conductance of IKr channels
IKr = GKr * sqrt(extra.Ko / 5.4) * x * r * (V - nernst.EK)
    desc: Rapid delayed Potassium current
    in [uA/uF]

#
# IKs :: Slow delayed rectifier Potassium current
# Page 11
#
# Modelled with two activation channels
#
[iks]
use membrane.V
sx  = 1 / (1 + exp((V + 11.60) / -8.932))
    desc: Steady-state value for activation of IKs channels
tx1 = 817.3 + 1 / (2.326e-4 * exp((V + 48.28) / 17.80) + 0.001292 * exp((V + 210) / -230))
    desc: Time constant for slow, low voltage IKs activation
dot(x1) = (sx - x1) / tx1
    desc: Slow, low voltage IKs activation
tx2 = 1 / (0.01 * exp((V - 50) / 20) + 0.0193 * exp((V + 66.54) / -31))
    desc: Time constant for fast, high voltage IKs activation
dot(x2) = (sx - x2) / tx2
    desc: Fast, high voltage IKs activation
KsCa = 1 + 0.6 / (1.0 + (3.8e-5 / calcium.Cai)^1.4)
    desc: Maximum conductance for IKs
GKs = if(cell.mode == 1, 1.4 * base, base)
    base = 0.0034
    desc: Conductivity adjustment for cell type
IKs = GKs * KsCa * x1 * x2 * (V - nernst.EKs)
    desc: Slow delayed rectifier Potassium current
    in [A/F]

#
# IK1 :: Inward rectifier Potassium current
# Page 12
#
# Modelled with an activation channel and an instantaneous inactivation channel
#
[ik1]
use membrane.V
dot(x) = (inf - x) / tau
    desc: Activation of IK1 channels
    inf = 1 / (1 + exp(-(V + 2.5538 * extra.Ko + 144.59) / (1.5692 * extra.Ko + 3.8115)))
        desc: Steady-state value for activation of IK1 channels
    tau = 122.2 / (exp((V + 127.2) / -20.36) + exp((V + 236.8) / 69.33))
        desc: Time constant for activation of IK1 channels
r = 1 / (1 + exp((V + 105.8 - 2.6 * extra.Ko) / 9.493))
    desc: Inactivation of IK1 channels
GK1 = base * piecewise(cell.mode == 0, 1, cell.mode == 1, 1.2, 1.3)
    in [mS/uF]
    desc: Conductivity of IK1 channels, cell-type dependent
    base = 0.1908 [mS/uF]
        in [mS/uF]
IK1 = GK1 * sqrt(extra.Ko) * r * x * (V - nernst.EK)
    desc: Inward rectifier Potassium current
    in [A/F]

#
# INaCa :: Sodium/Calcium exchange current
# page 12
#
[inaca]
use membrane.V
use extra.Nao, extra.Cao
use sodium.Nai, calcium.Cai
kna1   = 15.0
kna2   = 5.0
kna3   = 88.12
kasymm = 12.5
wna    = 6.0e4
wca    = 6.0e4
wnaca  = 5.0e3
kcaon  = 1.5e6
kcaoff = 5.0e3
qna    = 0.5224
qca    = 0.1670
hca    = exp(qca * V * phys.FRT)
hna    = exp(qna * V * phys.FRT)
# Parameters h
h1  = 1 + Nai / kna3 * (1 + hna)
h2  = (Nai * hna) / (kna3 * h1)
h3  = 1 / h1
h4  = 1 + Nai / kna1 * (1 + Nai / kna2)
h5  = Nai * Nai / (h4 * kna1 * kna2)
h6  = 1 / h4
h7  = 1 + Nao / kna3 * (1 + 1 / hna)
h8  = Nao / (kna3 * hna * h7)
h9  = 1 / h7
h10 = kasymm + 1 + Nao / kna1 * (1 + Nao / kna2)
h11 = Nao * Nao / (h10 * kna1 * kna2)
h12 = 1 / h10
# Parameters k
k1   = h12 * Cao * kcaon
k2   = kcaoff
k3p  = h9 * wca
k3pp = h8 * wnaca
k3   = k3p + k3pp
k4p  = h3 * wca / hca
k4pp = h2 * wnaca
k4   = k4p + k4pp
k5   = kcaoff
k6   = h6 * Cai * kcaon
k7   = h5 * h2 * wna
k8   = h8 * h11 * wna
x1 = k2 * k4 * (k7 + k6) + k5 * k7 * (k2 + k3)
x2 = k1 * k7 * (k4 + k5) + k4 * k6 * (k1 + k8)
x3 = k1 * k3 * (k7 + k6) + k8 * k6 * (k2 + k3)
x4 = k2 * k8 * (k4 + k5) + k3 * k5 * (k1 + k8)
E1 = x1 / (x1 + x2 + x3 + x4)
E2 = x2 / (x1 + x2 + x3 + x4)
E3 = x3 / (x1 + x2 + x3 + x4)
E4 = x4 / (x1 + x2 + x3 + x4)
KmCaAct = 150.0e-6
allo    = 1 / (1 + (KmCaAct / Cai)^2.0)
JncxNa  = 3 * (E4 * k7 - E1 * k8) + E3 * k4pp - E2 * k3pp
JncxCa  = E2 * k2 - E1 * k1
Gncx = piecewise(cell.mode == 0, base, cell.mode == 1, 1.1*base, 1.4*base)
    base = 0.0008
INaCa = 0.8 * Gncx * allo * (JncxNa + 2 * JncxCa)
    desc: Sodium/Calcium exchange current
    in [uA/uF]
INaCa_total = INaCa + inacass.INaCa_ss
    in [A/F]

#
# INaCa_ss :: Sodium/Calcium exchanger current into the L-type subspace
# Page 12
#
[inacass]
use membrane.V
use extra.Nao, extra.Cao
use sodium.Na_ss, calcium.Ca_ss
h1  = 1 + Na_ss / inaca.kna3 * (1 + inaca.hna)
h2  = (Na_ss * inaca.hna)/(inaca.kna3 * h1)
h3  = 1 / h1
h4  = 1 + Na_ss / inaca.kna1 * (1 + Na_ss / inaca.kna2)
h5  = Na_ss * Na_ss /(h4 * inaca.kna1 * inaca.kna2)
h6  = 1 / h4
h7  = 1 + Nao / inaca.kna3 * (1 + 1 / inaca.hna)
h8  = Nao / (inaca.kna3 * inaca.hna * h7)
h9  = 1/h7
h10 = inaca.kasymm + 1 + Nao / inaca.kna1 * (1 + Nao / inaca.kna2)
h11 = Nao * Nao / (h10 * inaca.kna1 * inaca.kna2)
h12 = 1/h10
k1   = h12 * Cao * inaca.kcaon
k2   = inaca.kcaoff
k3p  = h9 * inaca.wca
k3pp = h8 * inaca.wnaca
k3   = k3p + k3pp
k4p  = h3 * inaca.wca / inaca.hca
k4pp = h2 * inaca.wnaca
k4   = k4p + k4pp
k5   = inaca.kcaoff
k6   = h6 * Ca_ss * inaca.kcaon
k7   = h5 * h2 * inaca.wna
k8   = h8 * h11 * inaca.wna
x1 = k2 * k4 * (k7 + k6) + k5 * k7 * (k2 + k3)
x2 = k1 * k7 * (k4 + k5) + k4 * k6 * (k1 + k8)
x3 = k1 * k3 * (k7 + k6) + k8 * k6 * (k2 + k3)
x4 = k2 * k8 * (k4 + k5) + k3 * k5 * (k1 + k8)
E1 = x1 / (x1 + x2 + x3 + x4)
E2 = x2 / (x1 + x2 + x3 + x4)
E3 = x3 / (x1 + x2 + x3 + x4)
E4 = x4 / (x1 + x2 + x3 + x4)
KmCaAct = 150.0e-6
allo    = 1 / (1 + (KmCaAct / Ca_ss)^2)
JncxNa  = 3 * (E4 * k7 - E1 * k8) + E3 * k4pp - E2 * k3pp
JncxCa  = E2 * k2 - E1 * k1
INaCa_ss = 0.2 * inaca.Gncx * allo * (JncxNa + 2 * JncxCa)
    desc: Sodium/Calcium exchange current into the T-Tubule subspace
    in [uA/uF]

#
# INaK :: Sodium/Potassium ATPase current
# Page 14
#
[inak]
use membrane.V
use extra.Nao, sodium.Nai, sodium.Na_ss
use extra.Ko, potassium.Ki, potassium.K_ss
k1p = 949.5
k1m = 182.4
k2p = 687.2
k2m = 39.4
k3p = 1899.0
k3m = 79300.0
k4p = 639.0
k4m = 40.0
Knai0 = 9.073
Knao0 = 27.78
delta = -0.1550
Knai = Knai0 * exp(delta * V * phys.FRT / 3)
Knao = Knao0 * exp((1.0-delta) * V * phys.FRT / 3)
Kki    = 0.5
Kko    = 0.3582
MgADP  = 0.05
MgATP  = 9.8
Kmgatp = 1.698e-7
H      = 1.0e-7
eP     = 4.2
Khp    = 1.698e-7
Knap   = 224.0
Kxkur  = 292.0
P = eP / (1 + H / Khp + Nai / Knap + Ki / Kxkur)
a1 = (k1p * (Nai / Knai)^3) / ((1 + Nai / Knai)^3 + (1 + Ki / Kki)^2 - 1)
b1 = k1m * MgADP
a2 = k2p
b2 = (k2m * (Nao / Knao)^3) / ((1 + Nao / Knao)^3 + (1 + Ko / Kko)^2 - 1)
a3 = (k3p * (Ko / Kko)^2  ) / ((1 + Nao / Knao)^3 + (1 + Ko / Kko)^2 - 1)
b3 = (k3m * P * H)/(1 + MgATP / Kmgatp)
a4 = (k4p * MgATP / Kmgatp) / (1 + MgATP / Kmgatp)
b4 = (k4m * (Ki / Kki)^2) / ((1 + Nai / Knai)^3 + (1 + Ki / Kki)^2 - 1)
x1 = a4 * a1 * a2 + b2 * b4 * b3 + a2 * b4 * b3 + b3 * a1 * a2
x2 = b2 * b1 * b4 + a1 * a2 * a3 + a3 * b1 * b4 + a2 * a3 * b4
x3 = a2 * a3 * a4 + b3 * b2 * b1 + b2 * b1 * a4 + a3 * a4 * b1
x4 = b4 * b3 * b2 + a3 * a4 * a1 + b2 * a4 * a1 + b3 * b2 * a1
E1 = x1 / (x1 + x2 + x3 + x4)
E2 = x2 / (x1 + x2 + x3 + x4)
E3 = x3 / (x1 + x2 + x3 + x4)
E4 = x4 / (x1 + x2 + x3 + x4)
JnakNa = 3 * (E1 * a3 - E2 * b3)
JnakK  = 2 * (E4 * b1 - E3 * a1)
Pnak = piecewise(cell.mode == 0, base, cell.mode == 1, 0.9*base, 0.7*base)
    base = 30
INaK = Pnak * (JnakNa + JnakK)
    desc: Sodium/Potassium ATPase current
    in [uA/uF]

#
# IKb :: Background Potassium current
# Page 15
#
[ikb]
use membrane.V
xkb = 1 / (1 + exp((V - 14.48) / -18.34))
GKb = if(cell.mode == 1, 0.0018, 0.003)
IKb = GKb * xkb * (V - nernst.EK)
    desc: Background Potassium current
    in [uA/uF]

#
# INab :: Background Sodium current
# Page 15
#
[inab]
use membrane.V
PNab = 3.75e-10
INab = PNab * V * phys.FFRT * (sodium.Nai * evf - extra.Nao) / (evf - 1)
    evf = exp(V * phys.FRT)
    desc: Background Sodium current
    in [uA/uF]

#
# ICab :: Background Calcium current
# Page 15
#
[icab]
use membrane.V
PCab=2.5e-8
ICab = PCab * 4 * V * phys.FFRT * (calcium.Cai * evf2 - 0.341 * extra.Cao) / (evf2 - 1)
    evf2 = exp(2 * V * phys.FRT)
    desc: Background Calcium current
    in [uA/uF]

#
# IpCa :: Sarcolemmal Calcium pump current
# Page 15
#
[ipca]
use membrane.V
GpCa = 0.0005
IpCa = GpCa * calcium.Cai / (0.0005 + calcium.Cai)
    desc: Sarcolemmal Calcium pump current
    in [uA/uF]

#
# Jrel :: SR Calcium release flux via Ryanodine receptor
# Page 17
#
[ryr]
use calcium.Ca_jsr
bt=4.75
a_rel=0.5*bt
dot(Jrelnp) = (inf - Jrelnp) / tau
    tau = if(value < 0.001, 0.001, value)
    value = bt / (1.0 + 0.0123 / Ca_jsr)
    inf = if(cell.mode == 2, 1.7 * base, base)
        base = a_rel * -ical.ICaL / (1 + (1.5 / Ca_jsr)^8)

btp = 1.25*bt
a_relp = 0.5*btp
dot(Jrelp) = (inf - Jrelp) / tau
    tau = if(value < 0.001, 0.001, value)
    value = btp / (1 + 0.0123 / Ca_jsr)
    inf = if(cell.mode == 2, 1.7*base, base)
        base = a_relp * -ical.ICaL / (1 + (1.5 / Ca_jsr)^8)

Jrel = (1 - camk.f) * Jrelnp + camk.f * Jrelp
    desc: SR Calcium release flux via Ryanodine receptor
    in [mmol/L/ms]

#
# Jup :: Calcium uptake via SERCA pump
# Page 17
#
[serca]
use calcium.Cai, calcium.Ca_jsr, calcium.Ca_nsr
f = if(cell.mode == 1, 1.3, 1)
Jupnp = f * (0.004375 * Cai / (Cai + 0.00092))
Jupp  = f * (2.75 * 0.004375 * Cai / (Cai + 0.00092 - 0.00017))
Jleak = 0.0039375 * Ca_nsr / 15
    in [mmol/L/ms]
Jup = (1 - camk.f) * Jupnp + camk.f * Jupp - Jleak
    desc: Total Ca2+ uptake, via SERCA pump, from myoplasm to nsr
    in [mmol/L/ms]
Jtr = (Ca_nsr - Ca_jsr) / 100
    desc: Ca2+ translocation from nsr to jsr
    in [mmol/L/ms]

#
# Diffusion fluxes
# Page 16
#
[diff]
JdiffNa = (sodium.Na_ss - sodium.Nai) / 2
JdiffK  = (potassium.K_ss  - potassium.Ki)  / 2
Jdiff   = (calcium.Ca_ss - calcium.Cai) / 0.2

#
# Intracellular Sodium concentrations
# Page 18
#
[sodium]
use cell.AF, cell.vss, cell.vmyo
INa_tot    = ina.INa + inal.INaL + inab.INab + 3*inaca.INaCa + 3*inak.INaK
dot(Nai)   = -INa_tot * AF / vmyo + diff.JdiffNa * vss / vmyo
    desc: Intracellular Potassium concentration
INa_ss_tot = ical.ICaNa + 3*inacass.INaCa_ss
dot(Na_ss) = -INa_ss_tot * AF / vss - diff.JdiffNa

#
# Intracellular potassium concentrations
# Page 18
#
[potassium]
use cell.AF, cell.vss, cell.vmyo
IK_tot = (ito.Ito
        + ikr.IKr
        + iks.IKs
        + ik1.IK1
        + ikb.IKb
        - 2 * inak.INaK
        )
IK_ss_tot = ical.ICaK
dot(Ki)  = -(IK_tot + stimulus.i_stim) * AF / vmyo + diff.JdiffK * vss / vmyo
    desc: Intracellular Potassium concentration
dot(K_ss) = -IK_ss_tot * AF / vss - diff.JdiffK
    desc: Potassium concentration in the T-Tubule subspace

#
# Intracellular Calcium concentrations and buffers
# Page 18
#
[calcium]
use cell.AF, cell.vmyo, cell.vnsr, cell.vjsr, cell.vss
cmdnmax = if(cell.mode == 1, 1.3*base, base)
    base = 0.05
kmcmdn  = 0.00238
trpnmax = 0.07
kmtrpn  = 0.0005
BSRmax  = 0.047
KmBSR   = 0.00087
BSLmax  = 1.124
KmBSL   = 0.0087
csqnmax = 10.0
kmcsqn  = 0.8
ICa_tot = ipca.IpCa + icab.ICab - 2*inaca.INaCa
dot(Cai)  = buff * (-ICa_tot * AF / (2*vmyo) - serca.Jup  * vnsr / vmyo + diff.Jdiff * vss / vmyo )
    buff = 1 / (1 + cmdnmax * kmcmdn / (a*a) + trpnmax * kmtrpn / (b*b))
    a = kmcmdn + calcium.Cai
    b = kmtrpn + calcium.Cai
    desc: Intracellular Calcium concentratium
    in [mmol/L]
ICa_ss_tot = ical.ICaL - 2 * inacass.INaCa_ss
dot(Ca_ss) = buff * (-ICa_ss_tot * AF / (2*vss) + ryr.Jrel * vjsr / vss - diff.Jdiff )
    buff = 1 / (1 + BSRmax * KmBSR / (a*a) + BSLmax * KmBSL / (b*b))
    a = KmBSR + calcium.Ca_ss
    b = KmBSL + calcium.Ca_ss
    desc: Calcium concentratium in the T-Tubule subspace
    in [mmol/L]
dot(Ca_jsr) = buff * (serca.Jtr - ryr.Jrel)
    buff = 1 / (1 + csqnmax * kmcsqn / (a * a))
    a = kmcsqn + calcium.Ca_jsr
    desc: Calcium concentration in the JSR subspace
    in [mmol/L]
dot(Ca_nsr) = serca.Jup - serca.Jtr * vjsr / vnsr
    desc: Calcium concentration in the NSR subspace
    in [mmol/L]

#
# CaMKII signalling
#
[camk]
KmCaMK = 0.15
aCaMK  = 0.05
bCaMK  = 0.00068
CaMKo  = 0.05
KmCaM  = 0.0015
CaMKb  = CaMKo * (1.0 - CaMKt) / (1.0 + KmCaM / calcium.Ca_ss)
CaMKa  = CaMKb + CaMKt
dot(CaMKt) = aCaMK * CaMKb * CaMKa - bCaMK * CaMKt
f = 1 / (1 + KmCaMK / CaMKa)
    desc: Fraction of phosphorylated channels

[[protocol]]
# Level  Start    Length   Period   Multiplier
1        50       0.5      1000     0

[[script]]
import myokit
import myokit.lib.plots as mp
import matplotlib.pyplot as plt

# Get model, simulate a single beat
m = get_model()
p = get_protocol()
s = myokit.Simulation(m, p)

endo, epi, mid = 0, 1, 2
s.set_constant('cell.mode', endo)

# Run a simulation
cl = 1000
s.pre(50 * cl)
d = s.run(cl)

# List of currents, ordered to make the plot look good
currents = [
    # Outward, roughly big-to-small
    'iks.IKs',
    'ito.Ito',
    'ikb.IKb',
    'ikr.IKr',
    'ik1.IK1',
    'inak.INaK',

    # Main inward, roughly big-to-small
    'inal.INaL',
    'ical.ICaL_tot',
    'inaca.INaCa_tot' ,
    'inab.INab',
    'icab.ICab',
    'ina.INa',

    # Invisible
    #'ipca.IpCa',
]

# Normalise?
normalise = True

# Create figure
fig = plt.figure(figsize=(9, 9))
fig.subplots_adjust(0.1, 0.1, 0.85, 0.98)
ax = fig.add_subplot(1, 1, 1)
mp.cumulative_current(d, currents, ax, normalise=normalise)
ax.legend(loc=(1.02, 0.00))
ax.set_xlim(0, 1000)
ax.set_ylim(-1, 1)
font = dict(color='w', fontsize=14, weight='bold',
            horizontalalignment='center', verticalalignment='center')
plt.text(150, 0.03, 'IKs', **font)
plt.text(350, 0.15, 'IK1', **font)
plt.text(35,  0.08, 'Ito', **font)
plt.text(100, 0.18, 'IKb', **font)
plt.text(150, 0.50, 'IKr', **font)
plt.text(500, 0.50, 'INaK', **font)
plt.text(100, -0.10, 'ICaL', **font)
plt.text(90,  -0.55, 'INaL', **font)
plt.text(350, -0.40, 'INaCa', **font)
plt.text(600, -0.65, 'INab', **font)
plt.text(700, -0.85, 'ICab', **font)
plt.text(900, -0.98, 'INa', **font)
plt.savefig('temp.png')
plt.close()

